CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^.*_t(?P<Time>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "xy_")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ConvertObjectsToImage:[module_num:7|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
    Select the input objects:Nuclei
    Name the output image:NucleiLabels
    Select the color format:uint16
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:NucleiLabels
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nuclei_labels
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Documents/training-resources/image_data/nuclei_segmentation_workflow/output
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:9|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notes:['If you want all output in one table, remove the "_t${Time}" metadata from the "File name".']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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents/training-resources/image_data/nuclei_segmentation_workflow/output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Nuclei|AreaShape_MinorAxisLength,Nuclei|AreaShape_Orientation,Nuclei|AreaShape_Compactness,Nuclei|AreaShape_MedianRadius,Nuclei|AreaShape_Area,Nuclei|AreaShape_MeanRadius,Nuclei|AreaShape_Extent,Nuclei|AreaShape_EulerNumber,Nuclei|AreaShape_Perimeter,Nuclei|AreaShape_FormFactor,Nuclei|AreaShape_MajorAxisLength,Nuclei|AreaShape_EquivalentDiameter,Nuclei|AreaShape_Center_Y,Nuclei|AreaShape_Center_X,Nuclei|AreaShape_Solidity,Nuclei|AreaShape_Eccentricity,Nuclei|AreaShape_MinFeretDiameter,Nuclei|AreaShape_MaximumRadius,Nuclei|AreaShape_ConvexArea,Nuclei|AreaShape_MaxFeretDiameter,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:nuclei_t\g<Time>.tsv
    Use the object name for the file name?:No
